WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice(Description="The display the dome projector is on (DomeDisplay); a launch property."))
-> GroupWorkflow RigSetup
  Description: Reads this machine's rig.yml (ReadRigConfig) into the dome rig model (open_rigs.rigs.dome), opens every device with DomeHardware, starts the cameras 2 s later and opens the dome's display (DomeDisplay).
  Workflow
    GroupWorkflow ReadRigConfig
      Description: Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.
      Workflow
        OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
        -> AsyncSubject RigConfigDirectory
        -> IncludeWorkflow(Path=OpenRigs.Core:ReadRigConfig.bonsai, FileName=rig.yml)
        -> WorkflowOutput
    -> UclOpenCoenDomeNavigation.DeserializeFromYaml(Type=TypeMapping<UclOpenCoenDomeNavigation.DomeRig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    SubscribeSubject SpoutStepSize
    -> PropertyMapping(SpoutStepSize)
    -> IncludeWorkflow
      Path=OpenRigs.Devices:DomeHardware.bonsai
      Description: Every dome device, named as in the data, behind its subjects (Dome Building Blocks): the Behavior board (wheel distance, pulses, the ZapitTrigger line cleared however the workflow stops), the timestamp generator (Timestamp, HarpClockSet), both Lickety Splits, the three cameras and the lick spout stage, which homes, goes in and handles the spout commands.

    BooleanProperty(Value=true)
    -> Delay(DueTime=PT2S)
    -> MulticastSubject StartCameras

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=ProjectionCalibration) => #11
    ExternalizedMapping(DisplayDevice) => #12
    #11, #12 -> IncludeWorkflow
      Path=OpenRigs.Vision:DomeDisplay.bonsai
      Description="The dome's BonVision window, mesh mapping and gamma correction from rig.yml's projectionCalibration; stimuli draw on DrawStimuli."
      DisplayDevice=First
      WindowState=Fullscreen
      Width=1920
      Height=1080

ExternalizedMapping
  SubjectId(Description="The mouse's lab ID; the launch's own, from rig-control.")
  SessionId(Description="The session number; the launch's own, from rig-control.")
  TaskPath
    Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits; from the editor, config\task-abstract-av-corridor.yml."
-> GroupWorkflow Initialization
  Description: The experiment controller (OpenRigs.Control, ExperimentControl): SubjectId and SessionId from the launch, ManualRewardUl and SpoutStepSize settable live (each a subject of its name, its one default there, shown to the controller by ParameterDefault a second after Start), the spout commands (handled by HarpLickSpoutStage in DomeHardware) at any time; at Go RunSettings (subject, session), TaskFilePath (TaskPath, the task file rig-control wrote) and TrainingStage are published.
  Workflow
    ExternalizedMapping(Value(DisplayName=SubjectId, Description="The subject (mouse) lab ID."))
    -> StringProperty(Value="")
    -> Take(Count=1)
    -> AsyncSubject SubjectId

    ExternalizedMapping(SessionId) => #4
    SubscribeSubject SubjectId
    -> PropertyMapping(SubjectId) => #6
    #4, #6 -> IncludeWorkflow => #7
      Path=OpenRigs.Control:ExperimentControl.bonsai
      SubjectId=UNMAPPED
      SessionId=""
      ControlEndpoint=@tcp://127.0.0.1:5561
      Parameters
        Parameter
          Name=TrainingStage
          Value=0
          Description: Row of the task file's trainingStages to run, 0 to 5 (Tom Childs' stages 1 to 6; a row past the end stops the workflow at Go): suggested from the mouse's earlier experiments of the modality.
          Minimum=0
          Maximum=5
          WholeNumber=true
        Parameter
          Name=ManualRewardUl
          Value=""
          Description: Microlitres RewardLeft and RewardRight deliver, taken live before Go and kept after it; until set, the ManualRewardUl subject's default (Initialization). The task's own rewards are this stage's rewardSizeUl (trainingStages).
          Minimum=0
        Parameter
          Name=SpoutStepSize
          Value=""
          Description="Motor steps each spout nudge command moves, taken live while ready; until set, the SpoutStepSize subject's default (Initialization)."
          Minimum=1
          WholeNumber=true
      Commands
        Command(Name=RewardLeft, Description="Deliver one reward on the left spout (flush).")
        Command(Name=RewardRight, Description="Deliver one reward on the right spout (flush).")
        Command(Name=SpoutsHome, Description="Move both spouts to the home position.")
        Command(Name=SpoutsIn, Description="Move both spouts to the in position.")
        Command(Name=SpoutsOut, Description="Move both spouts to the out position.")
        Command(Name=SaveSpoutPositions, Description="Save the spouts' in positions to this mouse's file.")
        Command(Name=LeftUp, Description="Nudge the left spout up by SpoutStepSize.")
        Command(Name=LeftDown, Description="Nudge the left spout down by SpoutStepSize.")
        Command(Name=RightUp, Description="Nudge the right spout up by SpoutStepSize.")
        Command(Name=RightDown, Description="Nudge the right spout down by SpoutStepSize.")
        Command(Name=LeftFront, Description="Nudge the left spout forward by SpoutStepSize.")
        Command(Name=LeftBack, Description="Nudge the left spout back by SpoutStepSize.")
        Command(Name=RightFront, Description="Nudge the right spout forward by SpoutStepSize.")
        Command(Name=RightBack, Description="Nudge the right spout back by SpoutStepSize.")
        Command(Name=BaseLeft, Description="Nudge the spout base left by SpoutStepSize.")
        Command(Name=BaseRight, Description="Nudge the spout base right by SpoutStepSize.")
    SubscribeSubject SubjectId => #8
    #7, #8 -> SubscribeWhen

    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SubjectId) => #11
    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SessionId) => #13
    #11, #13 -> Zip
    -> Take(Count=1)
    -> Condition RunSettingsValid(Description="Subject and session given.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1.Trim().Length > 0 && Item2.Trim().Length > 0
        -> WorkflowOutput
    -> First
    -> AsyncSubject RunSettings

    SubscribeSubject ExperimentGo => #19
    ExternalizedMapping => #23
      Value
        DisplayName=TaskPath
        Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits; from the editor, config\task-abstract-av-corridor.yml."
    Source1=#19, Source1=#23 -> StringProperty(Value=..\config\task-abstract-av-corridor.yml)
    -> Take(Count=1)
    -> AsyncSubject TaskFilePath

    SubscribeSubject ExperimentGo
    -> OpenRigs.Control.ParameterValue(Name=TrainingStage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> AsyncSubject TrainingStage

    SubscribeSubject TrainingStage
    -> OpenRigs.Control.ReportMetric(Name=trainingStage)

    IntProperty(Value=150)
    -> BehaviorSubject SpoutStepSize

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=SpoutStepSize)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StepSizeToInt
      Expression: Convert.ToInt32(it)
    -> MulticastSubject SpoutStepSize

    DoubleProperty(Value=3)
    -> BehaviorSubject ManualRewardUl

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=ManualRewardUl)
    -> Condition Given?(Description="A blank set keeps the size as it was.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Trim().Length > 0
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToDouble
      Expression: Convert.ToDouble(it)
    -> MulticastSubject ManualRewardUl

    SubscribeSubject SpoutStepSize
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT1S)
    -> OpenRigs.Control.ParameterDefault(Name=SpoutStepSize)

    SubscribeSubject ManualRewardUl
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT1S)
    -> OpenRigs.Control.ParameterDefault(Name=ManualRewardUl)

GroupWorkflow Declarations
  Description: Subjects several groups share: Zapit's commands and replies, reward requests (side, microlitres) for DeliverReward, the mixer's buffers, and the task's events and rows.
  Workflow
    PublishSubject<OpenRigs.Devices.Zapit.ZapitCommand> ZapitCommands
    PublishSubject<OpenRigs.Devices.Zapit.ZapitReply> ZapitReplies
    PublishSubject<System.Tuple(System.String,System.Double)> RewardRequests
    PublishSubject<OpenCV.Net.Mat> Buffer
    PublishSubject<OpenCV.Net.Mat> RewardBuffer
    PublishSubject<OpenCV.Net.Mat> ErrorBuffer
    PublishSubject<CorridorEvent> TrialEvents
    PublishSubject<Bonsai.Harp.Timestamped(TrialRow)> TrialRow
    PublishSubject<Bonsai.Harp.Timestamped(StimulusStateRow)> StimulusRows

GroupWorkflow Ready
  Description: Reports Ready once the Harp clock is set and the spouts are homed; stops the workflow, naming what never came, if that takes longer than 400 s (the stage homes each motor within 60 s).
  Workflow
    SubscribeSubject HarpClockSet
    -> Take(Count=1)
    -> StringProperty(Value=HarpClockSet) => #2
    SubscribeSubject LickSpoutStage.Homed
    -> Take(Count=1)
    -> StringProperty(Value=SpoutsHomed) => #5
    #2, #5 -> Merge
    -> OpenRigs.Core.StartupWatchdog(Expected="HarpClockSet, SpoutsHomed", TimeoutSeconds=400, What="Readying the rig (the Harp clock and the spout stage's homing)")
    -> Last
    -> OpenRigs.Control.ReportPhase(Phase=Ready)

GroupWorkflow Task
  Description: Reads the task file at Go (TaskConfig) and checks it with the stage, rig.yml and the mouse (CreateCorridorSetup: a stage past the table, a reward zone outside the sweep in src\waveforms\sweep.json, the optogenetics rules, optogenetics on a software-triggered rig with a real mouse, the Zapit conditions file).
  Workflow
    SubscribeSubject TaskFilePath
    -> UclOpenCoenDomeNavigation.ReadTextFile
    -> UclOpenCoenDomeNavigationTask.DeserializeFromYaml(Type=TypeMapping<UclOpenCoenDomeNavigationTask.UclOpenCoenDomeNavigationTaskLogic>)
    -> AsyncSubject TaskConfig

    SubscribeSubject TaskConfig => #4
    SubscribeSubject TrainingStage => #5
    SubscribeSubject RigConfigs => #6
    SubscribeSubject SubjectId => #7
    #4, #5, #6, #7 -> Zip
    -> CreateCorridorSetup(SweepFile=waveforms\sweep.json)
    -> AsyncSubject CorridorSetup

GroupWorkflow Zapit(Description="Zapit (OpenRigs.Devices.Zapit), only in an optogenetics experiment.")
    SubscribeSubject TaskConfig
    -> MemberSelector(Selector=TaskParameters.Optogenetics.UseZapit)
    -> Take(Count=1)
    -> Condition OptogeneticsEnabled?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it
        -> WorkflowOutput
    -> SelectMany ConnectZapit
      Description: Connects to rig.yml's Zapit once Go says the experiment uses it: every ZapitCommands value goes out and every reply comes back on ZapitReplies. Stops the workflow on an error reply, no conditions file loaded, or a number of conditions other than the task's file has.
      Workflow
        WorkflowInput Source1

        SubscribeSubject ZapitCommands => #1
        Timer(DueTime=PT0S, Period=PT0S) => #2
        -> OpenRigs.Devices.Zapit.CreateZapitQuery(Query=IsStimConfigLoaded) => #3
        #2 -> OpenRigs.Devices.Zapit.CreateZapitQuery(Query=GetNumConditions) => #4
        #1, #3, #4 -> Merge => #5
        SubscribeSubject RigConfigs
        -> PropertyMapping(Host(Selector=Zapit.Host), Port(Selector=Zapit.Port)) => #7
        #5, #7 -> OpenRigs.Devices.Zapit.ZapitClient(Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
        -> MulticastSubject ZapitReplies
        -> WorkflowOutput

        SubscribeSubject ZapitReplies
        -> Condition ZapitError?(Description="An error reply, or no conditions file loaded in Zapit.")
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: IsError || (CommandCode == 2 && Value == 0)
            -> WorkflowOutput
        -> Format(Format="Zapit answered {0}: an error, or no conditions file loaded. Load the conditions file the task names in Zapit and check its DAQ.", Selector=it)
        -> OpenRigs.Core.ThrowError

        SubscribeSubject ZapitReplies
        -> Condition ConditionCountReply?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: CommandCode == 4
            -> WorkflowOutput
        -> Take(Count=1) => #17
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.Optogenetics.ZapitConfigPath) => #19
        #17, #19 -> Zip
        -> OpenRigs.Devices.Zapit.CheckZapitConditionCount

GroupWorkflow Commands(Description="RewardLeft and RewardRight give ManualRewardUl on that side (DeliverReward). The spout commands are DomeHardware's (HarpLickSpoutStage).")
    SubscribeSubject ControlEvents => #0
    -> OpenRigs.Control.OnCommand(Name=RewardLeft)
    -> StringProperty(Value=left) => #2
    SubscribeSubject ManualRewardUl => #3
    #2, #3 -> WithLatestFrom
    -> MulticastSubject RewardRequests
    #0 -> OpenRigs.Control.OnCommand(Name=RewardRight)
    -> StringProperty(Value=right) => #7
    SubscribeSubject ManualRewardUl => #8
    #7, #8 -> WithLatestFrom
    -> MulticastSubject RewardRequests

GroupWorkflow Grating(Description="The grating (BonVision DrawGratings) on the dome: each pip sets its spatial frequency and opacity (TaskLogic); off between trials.")
    SubscribeSubject DrawStimuli => #0
    BehaviorSubject<System.Double> GratingSpatialFrequency
    -> PropertyMapping(SpatialFrequency(Selector=it)) => #2
    BehaviorSubject<System.Double> GratingOpacity
    -> PropertyMapping(Opacity) => #4
    #0, #2, #4 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=30
      Layer=1
      ExtentX=270
      ExtentY=105
      SpatialFrequency=0.3
      TemporalFrequency=0
      Phase=16.8036766
      Angle=90
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1000
      Aperture=0
      Opacity=0

GroupWorkflow Audio
  Description: The dome speakers (rig.yml speakerArray.device), started bootDelay (at least 3 s) after Start: one mixer source each for the pips (Buffer), the reward tone and the error tone, so they play over each other, and the background noise, looped from Start and faded in to the task's level at Go. Every file in src\waveforms is one channel, at the loudness it plays at.
  Workflow
    GroupWorkflow Mixer
        GroupWorkflow MixerDevice => #0
            SubscribeSubject RigConfigs
            -> PropertyMapping
              HostApi(Selector=SpeakerArray.Device.HostApi)
              DeviceName(Selector=SpeakerArray.Device.DeviceName)
              SampleRate(Selector=SpeakerArray.Device.SampleRate)
              SuggestedLatency(Selector=SpeakerArray.Device.SuggestedLatency)
            -> Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
            -> Bonsai.Mixer.StartMixer
            -> BehaviorSubject Mixer
        SubscribeSubject RigConfigs
        -> Bonsai.Scripting.Expressions.ExpressionTransform BootDelay
          Description="rig.yml's bootDelay, never under 3 s: a fault while the sound card boots can blue-screen the PC."
          Expression: TimeSpan.FromSeconds(Math.Max(3.0, SpeakerArray.Device.BootDelay))
        -> PropertyMapping(DueTime) => #3
        #0, #3 -> DelaySubscription MixerBootDelay(Description="Deliberate: the mixer starts at least 3 s after Start. Never remove or shorten it.", DueTime=PT3S)
        -> WorkflowOutput

    SubscribeSubject Buffer => #1
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #3
    #1, #3 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject RewardBuffer => #5
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #7
    #5, #7 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject ErrorBuffer => #9
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #11
    #9, #11 -> Bonsai.Mixer.AppendBuffer

    Bonsai.Dsp.MatrixReader(Path=./waveforms/all_waveforms.bin, Offset=0, SampleRate=48000, ChannelCount=1, BufferLength=2400, Depth=F32, Layout=RowMajor)
    -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
    -> ToList
    -> AsyncSubject PipBuffers

    Bonsai.Dsp.MatrixReader(Path=./waveforms/reward_tone.bin, Offset=0, SampleRate=0, ChannelCount=1, BufferLength=0, Depth=F32, Layout=RowMajor)
    -> Take(Count=1)
    -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
    -> AsyncSubject RewardTone

    SubscribeSubject TaskConfig
    -> MemberSelector(Selector=TaskParameters.Punishment.Sound.Path)
    -> PropertyMapping(FileName)
    -> Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0)
    -> Take(Count=1) => #25
    SubscribeSubject TaskConfig
    -> Bonsai.Scripting.Expressions.ExpressionTransform ErrorGain
      Description="The file is 16-bit at the error tone's loudness; the task's punishment.sound.gain scales it."
      Expression: it.TaskParameters.Punishment.Sound.Gain / 32767.0
    -> PropertyMapping(Scale) => #28
    #25, #28 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.051850947599719e-05, Shift=0)
    -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
    -> AsyncSubject ErrorTone

    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=true, Playing=true, Gain=0)
    -> BehaviorSubject BackgroundSource

    Bonsai.Dsp.MatrixReader(Path=./waveforms/background_noise.bin, Offset=0, SampleRate=0, ChannelCount=1, BufferLength=0, Depth=F32, Layout=RowMajor)
    -> Take(Count=1) => #36
    SubscribeSubject BackgroundSource => #37
    #36, #37 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject TaskConfig
    -> Bonsai.Scripting.Expressions.ExpressionTransform BackgroundNoiseGain => #40
      Description="The noise file has a pip's RMS, so the task's backgroundNoiseLevel is the gain."
      Expression: Convert.ToSingle(it.TaskParameters.BackgroundNoiseLevel)
    SubscribeSubject BackgroundSource => #41
    #40, #41 -> CombineLatest
    -> InputMapping(Selector=Item2, Gain(Selector=Item1))
    -> Bonsai.Mixer.SetGain(Gain=0, Duration=2)

GroupWorkflow StartTrials(Description="Trials start 0.5 s after the experiment folder exists and the tones are loaded (TrialsReady).")
    SubscribeSubject CorridorSetup => #0
    SubscribeSubject PathPrefix => #1
    SubscribeSubject PipBuffers => #2
    #0, #1, #2 -> Zip
    -> MemberSelector(Selector=Item1)
    -> Delay(DueTime=PT0.5S)
    -> AsyncSubject TrialsReady

GroupWorkflow TaskLogic
  Description: The task in tested C# (src\Extensions\Corridor.cs, tests\Extensions.Tests): CorridorTask draws each trial (TrialDraw) at the start of its interval (the last outcome after any timeout), has a hardware-triggered Zapit armed during it (Arm, once the last trigger line has fallen), starts it at Go (Start, beep 0: the interval's end less the lead, max(laserToStimulusSeconds, 0), or later until the stage's quiet waits hold), then runs it along the virtual track (VirtualTrack) with a pip every 50 ms from the lead after Go, all on the Harp clock (Timestamp), until the outcome. Its events drive the hardware here: Arm sends Zapit the trial's condition (laser-off trials at 0 mW); Trigger, laserToStimulusSeconds before the first pip (after it if negative), raises the ZapitTrigger line (and on a software-triggered rig sends the StartStimulus) in an optogenetics experiment only, and CorridorTask stops the task if Zapit has not answered by then; Pip plays the pip and sets the grating; Outcome writes the trial row, rewards (DeliverReward, left spout) or plays the error tone, and in an optogenetics experiment clears the trigger line triggerHoldSeconds later (HarpDelay). Zapit adds no time.
  Workflow
    SubscribeSubject TrialsReady => #0
    SubscribeSubject Timestamp => #1
    SubscribeSubject WheelDistanceCm => #2
    SubscribeSubject LickStateLeft => #3
    SubscribeSubject ZapitReplies => #4
    #0, #1, #2, #3, #4 -> CorridorTask
    -> ObserveOn(Scheduler=NewThreadScheduler)
    -> MulticastSubject TrialEvents

    SubscribeSubject TrialEvents
    -> CorridorEvents(Kind=Arm)
    -> ZapitTrialCommand(HardwareTriggered=true)
    -> MulticastSubject ZapitCommands

    SubscribeSubject TrialEvents
    -> CorridorEvents(Kind=Start) => #13
    -> MemberSelector(Selector=Trial.trialNumber)
    -> OpenRigs.Control.ReportMetric(Name=trialNumber)
    #13 -> MemberSelector(Selector=Trial.rewardSizeUl)
    -> OpenRigs.Control.ReportMetric(Name=rewardSizeUl)
    #13 -> MemberSelector(Selector=Trial.laserCondition)
    -> OpenRigs.Control.ReportMetric(Name=laserCondition)

    SubscribeSubject ZapitTriggerLine => #21
    SubscribeSubject TrialEvents
    -> CorridorEvents(Kind=Trigger) => #70
    -> Condition Optogenetics? => #20
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Trial.optogenetics
        -> WorkflowOutput
    #20, #21 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> OpenRigs.Devices.Zapit.ZapitLineMessage(Set=true)
    -> MulticastSubject BehaviorBoard-Main.Commands
    #20 -> SelectMany LaserOnUntilOutcome
      Description: From the trigger, stops Zapit once per optogenetics trial: at the outcome, at laserMaxSeconds on the Harp clock (LaserCap), or at laserMaxSeconds on the wall clock, a backstop should the board stall (the one wall-clock wait in TaskLogic). A trial that ends before its trigger has no laser; the next StartStimulus disarms it.
      Workflow
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform LaserMax
          Expression: TimeSpan.FromSeconds(Trial.laserMaxSeconds)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT12.5S)
        -> Unit => #15
        SubscribeSubject TrialEvents
        -> CorridorEvents(Kind=Outcome)
        -> Unit => #13
        SubscribeSubject TrialEvents
        -> CorridorEvents(Kind=LaserCap)
        -> Unit => #14
        #13, #14, #15 -> Merge
        -> Take(Count=1)
        -> StopZapit
        -> MulticastSubject ZapitCommands
        -> WorkflowOutput
    #70 -> Condition SoftwareTriggered?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Trial.optogenetics && !Trial.armZapit
        -> WorkflowOutput
    -> ZapitTrialCommand(HardwareTriggered=false)
    -> MulticastSubject ZapitCommands

    SubscribeSubject TrialEvents
    -> CorridorEvents(Kind=Pip) => #31
    -> MemberSelector(Selector=Frame.Row.visualSpatialFrequencyCpd)
    -> MulticastSubject GratingSpatialFrequency
    #31 -> MemberSelector(Selector=Frame.GratingOpacity)
    -> MulticastSubject GratingOpacity
    #31 -> CreateStimulusRow
    -> MulticastSubject StimulusRows
    SubscribeSubject PipBuffers => #32
    #31, #32 -> WithLatestFrom
    -> PipBuffer
    -> MulticastSubject Buffer

    SubscribeSubject TrialEvents
    -> CorridorEvents(Kind=Outcome) => #43
    -> DoubleProperty(Value=0)
    -> MulticastSubject GratingOpacity
    #43 -> CreateTrialRow
    -> MulticastSubject TrialRow
    #43 -> Condition Rewarded? => #48
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Rewarded
        -> WorkflowOutput
    -> MemberSelector(Selector=Reward)
    -> MulticastSubject RewardRequests
    #43 -> Condition ErrorSound? => #55
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: ErrorSound
        -> WorkflowOutput
    #43 -> Condition OptogeneticsOutcome?(Description="Only an optogenetics experiment clears the trigger line, as only one raises it (Pip, 13 Nov 2026).")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Trial.optogenetics
        -> WorkflowOutput
    -> InputMapping(Selector=it, DueSeconds(Selector=Trial.triggerHoldSeconds)) => #61
    SubscribeSubject RewardTone => #51
    #48, #51 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject RewardBuffer
    SubscribeSubject ErrorTone => #56
    #55, #56 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject ErrorBuffer
    SubscribeSubject Timestamp => #62
    #61, #62 -> OpenRigs.Core.HarpDelay(DueSeconds=1) => #63
    SubscribeSubject ZapitTriggerLine => #64
    #63, #64 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> OpenRigs.Devices.Zapit.ZapitLineMessage(Set=false)
    -> MulticastSubject BehaviorBoard-Main.Commands

ExternalizedMapping
  MissingCalibration
    Description="What a reward valve with no calibration file does: Refuse stops the workflow at Start; DeliverNothing (the test mouse) logs each reward as 0 ul. rig-control sets it per launch."
-> GroupWorkflow Logging
  Description: Everything written to the experiment folder: LogControllerLogic makes the folder at Go and publishes PathPrefix; ExperimentLogs holds every log that waits for it; DomeHarpLogs records the Harp boards; DeliverReward delivers and logs rewards; BonsaiData_Async takes the controller's events; RecordHarpDevices, ExperimentManifest and the Recording phase follow PathPrefix.
  Workflow
    GroupWorkflow LogControllerLogic
      Description: Waits for Go (RunSettings: the controller's SubjectId and SessionId), then LogController creates the experiment folder RootPath\sub-<SubjectId>\ses-<SessionId>_<DateTime> and publishes it as PathPrefix, which every log waits for. RootPath is rig.yml's, the rig's acquisition folder itself (C:\Coen-Lab-Local\Acquired-Data): experiments have no project folder.
      Workflow
        SubscribeSubject RunSettings
        -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #1
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=RootPath)
        -> PropertyMapping(Path) => #4
        #1, #4 -> IncludeWorkflow(Path=OpenRigs.Logging:LogController.bonsai, SubjectId=UNMAPPED, SessionId=UNMAPPED, Path=C:\Coen-Lab-Local\Acquired-Data)
        -> DelaySubscription(DueTime=PT1S) => #6
        SubscribeSubject RunSettings => #7
        #6, #7 -> SubscribeWhen
        -> WorkflowOutput

    IncludeWorkflow(Path=OpenRigs.Logging:LogAsync.bonsai)

    SubscribeSubject PathPrefix
    -> SelectMany ExperimentLogs
      Description: Starts every experiment log once LogControllerLogic publishes PathPrefix: BonsaiData_Trial (LogTrial; one row per trial, built by CreateTrialRow when the outcome is known; columns in schemas\trial-columns.yml), BonsaiData_StimulusState (one row per pip), the three cameras (LogVideo, after PathPrefix: an include cannot subscribe to the experiment folder early), the settings files (Settings_Rig, Settings_Task, Settings_Experiment, Settings_ZapitConditions in an optogenetics experiment), the RngSeed event and Zapit's replies.
      Workflow
        SubscribeSubject TrialRow
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogTrial.bonsai)

        SubscribeSubject StimulusRows
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=BonsaiData_StimulusState, Selector="", AutoFlush=true, Extension=csv)

        GroupWorkflow Cameras
            SubscribeSubject PathPrefix
            -> SelectMany
                SubscribeSubject Camera-Face.Data
                -> Skip(Count=1) => #1
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #10
                #1, #10 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Face, FrameRate=50)

                SubscribeSubject Camera-Pupil.Data
                -> Skip(Count=1) => #4
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #12
                #4, #12 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Pupil, FrameRate=50)

                SubscribeSubject Camera-Body.Data
                -> Skip(Count=1) => #7
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #14
                #7, #14 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Body, FrameRate=50)

        SubscribeSubject RigConfigs
        -> UclOpenCoenDomeNavigation.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Rig(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskConfig
        -> UclOpenCoenDomeNavigationTask.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Task(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject ExperimentGo
        -> OpenRigs.Control.ExperimentSettings
        -> IncludeWorkflow Settings_Experiment(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TrialEvents
        -> CorridorEvents(Kind=Start)
        -> MemberSelector RngSeed
          Description: The seed every draw of the experiment follows from (the task file's rngSeed, or one drawn at Go when it is null), logged once: the Take(1) is after the multicast, so the shared AsyncEvents subject never completes.
          Selector=Trial.rngSeed
        -> OpenRigs.Logging.CreateAsyncEvent(Event=RngSeed)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> MulticastSubject AsyncEvents
        -> Take(Count=1)

        GroupWorkflow ZapitReplies
          Description: Harp-timestamped log of every Zapit reply from when ExperimentLogs starts (the presented condition and laser state per StartStimulus). ZapitReplies is a PublishSubject, so a reply before then, such as the startup GetNumConditions, is not in it.
          Workflow
            SubscribeSubject ZapitReplies
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                                  CommandCode as command,
                                  Value as value,
                                  LaserOn as laserOn,
                                  IsError as isError,
                                  ServerDatenum as serverDatenum)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=BonsaiData_ZapitReplies, Selector="", Extension=csv)
            -> WorkflowOutput

        SubscribeSubject TaskConfig
        -> Condition OptogeneticsExperiment?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TaskParameters.Optogenetics.UseZapit
            -> WorkflowOutput
        -> MemberSelector(Selector=TaskParameters.Optogenetics.ZapitConfigPath)
        -> OpenRigs.Devices.Zapit.ZapitConditionsSnapshot
        -> IncludeWorkflow Settings_ZapitConditions(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    IncludeWorkflow
      Path=OpenRigs.Devices:DomeHarpLogs.bonsai
      Description="One LogHarpDevice per dome Harp device, from the experiment folder and the Harp clock being set."

    SubscribeSubject RewardRequests => #5
    SubscribeSubject RigFile
    -> PropertyMapping(RigFile) => #7
    ExternalizedMapping(MissingCalibration) => #8
    #5, #7, #8 -> IncludeWorkflow
      Path=OpenRigs.Devices:BehaviorBoard.DeliverReward.bonsai
      Description: Each reward (side, microlitres), planned from that side's valve calibration and fired on the Harp clock at the calibration's pulseGapMs; a RewardDelivered row in BonsaiData_Async and each calibrated valve's file as ValveCalibrationDO<n>.
      RigFile=UNMAPPED
      CalibrationDirectory=""
      MissingCalibration=Refuse

    SubscribeSubject PathPrefix
    -> OpenRigs.Control.ReportMetric(Name=path)
    -> OpenRigs.Control.ReportPhase(Phase=Recording)

    OpenRigs.HarpDevices.RecordHarpDevices RecordHarpDevices
      Description: Checks every Harp device in rig.yml at Start and records it into each experiment (OpenRigs.HarpDevices): the Behavior board, the timestamp generator, both stepper drivers and both Lickety Splits (each a rig.yml entry with a portName whose data the workflow publishes as <Name>.Data) must be on their portName with their usbSerial, or the workflow stops saying which board is where; 0.5 s after the experiment folder appears it asks each for a register dump on <Name>.Commands, which its log records; and it writes <Name>\<Name>_device.json and the register map <Name>\<Name>.yml, which ExperimentManifest expects (harp).
      ConfigRoot=C:\Coen-Lab-Local\RigConfigs

    OpenRigs.Manifest.ExperimentManifest ExperimentManifest
      Description: Writes manifest.json into the experiment folder (OpenRigs.Manifest), as av-dome's: the machine, this repo's commit, who launched it and sent Go, rig.yml and the calibration files the workflow reads (MeshMap.csv, gammalut.bmp, this mouse's spout positions) by hash, what each BonsaiData_Trial column means (schemas\trial-columns.yml), and what the experiment must leave: a folder for each device in rig.yml, the Harp device records, the three settings files and BonsaiData (Trial, Async and StimulusState); DeliverReward copies each calibrated valve's file in as ValveCalibrationDO<n>.
      IngestScript=coen-dome-navigation
      ConfigFiles: C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\rig.yml;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\MeshMap.csv;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\gammalut.bmp;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\LickSpoutPositions\{SubjectId}.csv
      ExpectedFiles=auto;harp;Settings/Settings_Rig_;Settings/Settings_Task_;Settings/Settings_Experiment_;BonsaiData/
      TrialColumns=schemas\trial-columns.yml

    SubscribeSubject ControlEvents
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new((it.Kind.ToString() == "Command" ? it.Name : it.Kind.ToString()) as Event, it.ToString() as Detail)
    -> OpenRigs.Logging.CreateAsyncEvent(Event=Control)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MulticastSubject AsyncEvents

OpenRigs.LiveView.StreamDevices LiveView
  Description: Streams every device in this machine's rig.yml that the workflow publishes, over ZeroMQ, for the live view (OpenRigs.LiveView): data on TCP 5556, video on 5558, from Start, in ready mode too. The three cameras as Camera-Face/Pupil/Body.video, 5 JPEG frames a second at 320 x 240, and the Behavior board's encoder from BehaviorBoard-Main.Data, 10 a second; each rate and size can be changed in rig.yml under the device's liveView:. Also elapsed, seconds since the experiment folder appeared, and liveview, this workflow and its commit. Every message carries the rig and the session key, ready until the experiment folder exists. Last in the workflow, because it streams only subjects built before it. A port already in use stops the workflow at Start.
  ConfigRoot=C:\Coen-Lab-Local\RigConfigs
  DataPort=5556
  VideoPort=5558
